CellProfiler Pipeline: http://www.cellprofiler.org
Version:1
SVNRevision:11710

LoadImages:[module_num:1|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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:None
    Input image file location:Default Input Folder|None
    Check image sets for missing or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:2
    Text that these images have in common (case-sensitive):Phako
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    Extract metadata from where?:Path
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    Type the regular expression that finds metadata in the subfolder path:.*[\\\\/](?P<Date>.*)[\\\\/](?P<Run>.*)$
    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:Phako
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    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):FITC
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    Extract metadata from where?:Path
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    Type the regular expression that finds metadata in the subfolder path:.*[\\\\/](?P<Date>.*)[\\\\/](?P<Run>.*)$
    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:FITC
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    Rescale intensities?:Yes

CorrectIlluminationCalculate:[module_num:2|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
    Select the input image:FITC
    Name the output image:IllumFITC
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image for use later in the pipeline (for example, in SaveImages)?:No
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    Retain the dilated image for use later in the pipeline (for example, in SaveImages)?:No
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
CorrectIlluminationCalculate:[module_num:3|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
    Select the input image:Phako
    Name the output image:IllumPhako
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Splines
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    Retain the averaged image for use later in the pipeline (for example, in SaveImages)?:No
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    Retain the dilated image for use later in the pipeline (for example, in SaveImages)?:No
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    Automatically calculate spline parameters?:Yes
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
CorrectIlluminationApply:[module_num:4|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
    Select the input image:FITC
    Name the output image:CorrFITC
    Select the illumination function:IllumFITC
    Select how the illumination function is applied:Divide

CorrectIlluminationApply:[module_num:5|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
    Select the input image:Phako
    Name the output image:CorrPhako
    Select the illumination function:IllumPhako
    Select how the illumination function is applied:Subtract

EnhanceOrSuppressFeatures:[module_num:6|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
    Select the input image:CorrPhako
    Name the output image:FeaturePhako
    Select the operation:Enhance
    Feature size:10
    Feature type:Dark holes
    Range of hole sizes:5,30

ApplyThreshold:[module_num:7|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
    Select the input image:FeaturePhako
    Name the output image:ThreshPhako
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Otsu Global
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    Lower and upper bounds on threshold:0.000000,1.000000
    Threshold correction factor:1.5
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:ThreshPhako
    Name the primary objects to be identified:EC
    Typical diameter of objects, in pixel units (Min,Max):5,40
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Select the thresholding method:Otsu Global
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.000000,1.000000
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    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:ECOutlines
    Fill holes in identified objects?:Yes
    Automatically calculate size of smoothing filter?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
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    Retain outlines of the identified objects?:Yes
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Handling of objects if excessive number of objects identified:Continue
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
IdentifySecondaryObjects:[module_num:9|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
    Select the input objects:EC
    Name the objects to be identified:ECexpanded
    Select the method to identify the secondary objects:Distance - N
    Select the input image:CorrPhako
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    Number of pixels by which to expand the primary objects:30
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    Name the outline image:ECSecondaryOutlines
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    Retain outlines of the identified secondary objects?:Yes
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    Discard secondary objects that touch the edge of the image?:No
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    Fill holes in identified objects?:Yes

IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:CorrFITC
    Name the primary objects to be identified:PBL
    Typical diameter of objects, in pixel units (Min,Max):3,10
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Select the thresholding method:Otsu Global
    Threshold correction factor:1.5
    Lower and upper bounds on threshold:0.005,1.0
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    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:PBLOutlines
    Fill holes in identified objects?:Yes
    Automatically calculate size of smoothing filter?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
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    Retain outlines of the identified objects?:Yes
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Handling of objects if excessive number of objects identified:Continue
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
RelateObjects:[module_num:11|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
    Select the input child objects:PBL
    Select the input parent objects:ECexpanded
    Calculate distances?:None
    Calculate per-parent means for all child measurements?:No
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
ConserveMemory:[module_num:12|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
    Specify which images?:Images to remove
    Select image to remove:IllumFITC
    Select image to remove:IllumPhako
    Select image to remove:CorrFITC
    Select image to remove:CorrPhako

OverlayOutlines:[module_num:13|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Phako
    Name the output image:PhakoOverlay
    Select outline display mode:Color
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    Width of outlines:2
    Select outlines to display:ECOutlines
    Select outline color:Black
    Select outlines to display:PBLOutlines
    Select outline color:Green
    Select outlines to display:ECSecondaryOutlines
    Select outline color:White

GrayToColor:[module_num:14|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
    Select a color scheme:RGB
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    Select the input image to be colored green:FITC
    Select the input image to be colored blue:Phako
    Name the output image:ECPBLRaw
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:PhakoOverlay
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Phako
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:_Outlines
    Select file format to use:jpg
    Output file location:Default Output Folder sub-folder|Images
    Image bit depth:8
    Overwrite existing files without warning?:No
    Select how often to save:Every cycle
    Rescale the images? :No
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    Store file and path information to the saved image?:Yes
    Create subfolders in the output folder?:Yes

SaveImages:[module_num:16|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
    Select the type of image to save:Image
    Select the image to save:ECPBLRaw
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Phako
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:_Overlay
    Select file format to use:jpg
    Output file location:Default Output Folder sub-folder|Images
    Image bit depth:8
    Overwrite existing files without warning?:No
    Select how often to save:Every cycle
    Rescale the images? :No
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    Store file and path information to the saved image?:Yes
    Create subfolders in the output folder?:Yes

ExportToSpreadsheet:[module_num:17|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
    Select or enter the column delimiter:Comma (",")
    Prepend the output file name to the data file names?:Yes
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the columns of measurements to export?:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|None
    Create a GenePattern GCT file?:No
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    Export all measurements, using default file names?:Yes
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