CellProfiler Pipeline: http://www.cellprofiler.org
Version:1
SVNRevision:11710

LoadImages:[module_num:1|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notes:["Load the images by matching files in the folder against the unique text pattern for each stain: 'Channel 1' for protein, 'Channel 2' for the nuclei image. The two images together comprise an image set."]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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:None
    Input image file location:Default Input Folder|.
    Check image sets for missing or duplicate files?:No
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:4
    Text that these images have in common (case-sensitive):_0001.tif
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:OrigPhalloidin
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    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):_0002.tif
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:OrigRef
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    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):_0003.tif
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:OrigDNA
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    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):_0000.tif
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:OrigPOI
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    Rescale intensities?:Yes

IdentifyPrimaryObjects:[module_num:2|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
    Select the input image:OrigDNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):18,40
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Select the thresholding method:Otsu Global
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1.0
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    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:20
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:Yes
    Automatically calculate size of smoothing filter?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
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    Retain outlines of the identified objects?:No
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Handling of objects if excessive number of objects identified:Continue
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
Smooth:[module_num:3|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
    Select the input image:OrigPhalloidin
    Name the output image:SmoothPhalloidin
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter, in  pixels:20.0
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
IdentifySecondaryObjects:[module_num:4|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:SmoothPhalloidin
    Select the thresholding method:Otsu Global
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.000000,1.000000
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    Regularization factor:0.05
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    Retain outlines of the identified secondary objects?:No
    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Discard secondary objects that touch the edge of the image?:No
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    Fill holes in identified objects?:Yes

IdentifyTertiaryObjects:[module_num:5|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
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    Retain outlines of the tertiary objects?:No

MeasureObjectIntensity:[module_num:6|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
    Hidden:3
    Select an image to measure:OrigPOI
    Select an image to measure:OrigPhalloidin
    Select an image to measure:OrigRef
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Select objects to measure:Nuclei

ExportToSpreadsheet:[module_num:7|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
    Select or enter the column delimiter:Comma (",")
    Prepend the output file name to the data file names?:Yes
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the columns of measurements to export?:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|None
    Create a GenePattern GCT file?:No
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    Export all measurements, using default file names?:Yes
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